Property,Camera,AllowMultiROI,0
Property,Camera,Binning,1
Property,Camera,BitDepth,16
Property,Camera,CCDTemperature,0.0000
Property,Camera,DisplayImageNumber,0
Property,Camera,DropPixels,0
Property,Camera,Exposure,100.0000
Property,Camera,FastImage,0
Property,Camera,FractionOfPixelsToDropOrSaturate,0.0020
Property,Camera,Gain,0
Property,Camera,MaximumExposureMs,10000.0000
Property,Camera,Mode,Artificial Waves
Property,Camera,MultiROIFillValue,0
Property,Camera,Offset,0
Property,Camera,OnCameraCCDXSize,2048
Property,Camera,OnCameraCCDYSize,2048
Property,Camera,Photon Conversion Factor,1.0000
Property,Camera,Photon Flux,50.0000
Property,Camera,PixelType,16bit
Property,Camera,ReadNoise (electrons),2.5000
Property,Camera,ReadoutTime,0.0000
Property,Camera,RotateImages,0
Property,Camera,SaturatePixels,0
Property,Camera,ScanMode,1
Property,Camera,SimulateCrash,
Property,Camera,StripeWidth,1.0000
Property,Camera,TestProperty1,0.0000
Property,Camera,TestProperty2,0.0000
Property,Camera,TestProperty3,0.0000
Property,Camera,TestProperty4,0.0000
Property,Camera,TestProperty5,0.0000
Property,Camera,TestProperty6,0.0000
Property,Camera,TransposeCorrection,0
Property,Camera,TransposeMirrorX,0
Property,Camera,TransposeMirrorY,0
Property,Camera,TransposeXY,0
Property,Camera,TriggerDevice,
Property,Camera,UseExposureSequences,No
Property,Dichroic,ClosedPosition,0
Property,Dichroic,Label,400DCLP
Property,Dichroic,State,0
Property,Emission,ClosedPosition,0
Property,Emission,Label,Chroma-HQ620
Property,Emission,State,0
Property,Excitation,ClosedPosition,0
Property,Excitation,Label,Chroma-D360
Property,Excitation,State,0
Property,Objective,Label,Nikon 10X S Fluor
Property,Objective,State,1
Property,Objective,Trigger,-
Property,Z,Position,0.0000
Property,Z,UseSequences,No
Property,Path,Label,State-0
Property,Path,State,0
Property,XY,TransposeMirrorX,0
Property,XY,TransposeMirrorY,0
Property,Shutter,State,0
Property,Core,AutoFocus,Autofocus
Property,Core,AutoShutter,1
Property,Core,Camera,Camera
Property,Core,ChannelGroup,Channel
Property,Core,Focus,Z
Property,Core,Galvo,
Property,Core,ImageProcessor,
Property,Core,Initialize,1
Property,Core,SLM,
Property,Core,Shutter,Shutter
Property,Core,TimeoutMs,5000
Property,Core,XYStage,XY
